PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-1, -1, -1]
  expName = posner
  keyboardBackend = ioHub
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Routines
  Routine instructs
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    TextComponent instructText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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      text:
        A target will appear on the left or the right

        Click on the target as fast as you can!
    MouseComponent mouseStart
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextboxComponent start
      bold = False
      borderColor = black
      editable = False
      fillColor = green
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text = CLICK HERE TO START
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  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
      units = height
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    ImageComponent cue
      image = images/arrow-left.png
      ori [set every repeat] = cueOri
      size = (.20, .20)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
      units = height
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    ImageComponent target
      image = images/circle_red.png
      pos [set every repeat] = [targetX, 0]
      size = (.20, .20)
      startVal [time (s)] = 1.0
      units = height
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1.0
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    CodeComponent track_rt
      Code Type = Auto->JS
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      Begin Experiment:
        valid_rts = []
        invalid_rts = []
      End Routine:
        if congr == 1:
            valid_rts.append(mouse.time[-1])
        if congr == 0:
            invalid_rts.append(mouse.time[-1])
    TextComponent reminder
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 4
      text = Click on the target!
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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  Routine finish
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        valid_av = average(valid_rts)
        invalid_av = average(invalid_rts)

        #store summaries to data file
        thisExp.addData('valid_av', valid_av)
        thisExp.addData('invalid_av', invalid_av)

        endfb = 'Your response time for congruent trials was ' + str(int(valid_av*1000))+ 'ms\nYour response time for incongruent targets was ' + str(int(invalid_av*1000))+'ms'
    TextComponent finishMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $endfb 
      units = height
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  Routine feedback
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    TextComponent rtfb
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'Response time: ' + str(int(mouse.time[-1]*1000)) + 'ms'
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    TextboxComponent trial_counter_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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Flow
  Routine instructs
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 180), ('congr', 0), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 0), ('congr', 0), ('corrAns', 'right')])]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finish
